# 1 "/opt/topspin3.5pl7/exp/stan/nmr/lists/pp/user/bbhd_psycheclipcosy_apc_ts3.mb"
;bbhd_psyche_clip_cosy
;based on TOCSY with ZQ elimination from
;M. J. Thrippleton and J. Keeler
;Angew.Chem.Int.Ed. 2003, 42, 3938-3941
;with PSYCHE homodecoupling
;clean in-phase transfer according to 
;Koos, M. R. M.; Kummerlowe, G.; Kaltschnee, L.; Thiele, C. M.; Luy, B. 
;Angew.Chem.Int.Ed. 2016, 55, 7655-7659

;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=

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

"d0=3u"
"in0=inf1/2"
"in1=2*in0"
"p2=p1*2"
"p22=p32"
"p27=500u"
"d27=500u"
"d13=50u"
"d18=d13+p27+d27"
"d11=30m"
"d12=20u"
;"d7=100m"
"d6=100m"
"d20=1/(4*cnst22)"
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"cnst50=(cnst20/360)*sqrt((2*cnst21)/(p32/2000000))"
"p30=1000000/(cnst50*4)"
"cnst31=(p30/p1)*(p30/p1)" 
"spw29=plw1/cnst31"

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; dimension 2D; AQ_mode  (F1) States-TPPI
define delay MCWRK
define delay MCREST
define loopcounter ST1CNT
"ST1CNT = td1 / 2"
"MCREST = d11 - d11"
"MCWRK = 0.333333*d11"

    dccorr
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1 ze
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LBLAV, MCWRK
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2 MCWRK 
LBLSTS1, MCWRK 
LBLF1, MCWRK
  MCREST
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3 d12 pl1:f1
  
d1
  
p1 ph1
  
d0
; the homodecoupling starts here
  
d13 setnmr3|0 setnmr0|34|32|33 ctrlgrad 0 
  
p27:gp3
  
d27
  
p2 ph6
  
d13
  
p27:gp3
  
d27
p27:gp7
 
d27
  
100u pl0:f1
  
3u 
  
(center (p22:gp4) (p32:sp29 ph7):f1)
  
100u pl1:f1
  
d13
  
p27:gp7
  
d27
  
d27
  
d27
; the homodecoupling ends here
  
d0
  
p2 ph5
  
d18
  
3u 
  
p1 ph2
; magnetisation moved to z
  
5u pl0:f1
  
300u gron0
  
p11:sp1:f1 ph4
  
100u groff
  
5u pl1:f1
; the in-phase transfer starts here
  
p1 ph2
  
d20
  
p2 ph8
  
d20
  
p1 ph8
  
d20
  
p2 ph8
  
d20
  
p1 ph2
; the in-phase transfer ends here
  
5u pl0:f1
  
d6 gron5
  
300u gron0
  
p12:sp2:f1 ph4
  
100u groff
  
d7
  
5u pl1:f1
  
4u setnmr3^0 setnmr0^34^32^33 ctrlgrad 7  
  
p1 ph3
  
go=2 ph31
  
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  MCWRK  wr #0 if #0 zd ip1
  lo to LBLSTS1 times 2
  MCWRK id0
  lo to LBLF1 times ST1CNT
  MCWRK rf #0
  lo to LBLAV times tdav
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exit

ph1=0 2               ;first hard pulse 90
ph2=0 0               ;hard pulse 90 sending magnetization to z for filtering
ph3=0 0               ;hard pulse 90 sending magnetization to plane after filtering
ph4=0                 ;sweep pulse as filter
ph5=0 0               ;hard pulse 180
ph6=0 0               ;hard pulse 180 during t1
ph7=0 0               ;PSYCHE pulse element
ph8=1                 ;hard pulses in CLIP transfer
ph31=0 2


          
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;pl0 : zero power (120 dB)
;pl1 : high power
;p1  : 90 degree high power pulse
;p11 : duration of first sweep
;p12 : duration of second sweep
;d0  : incremented delay
;d1  : relaxation delay
;d6  : duration of homospoil
;d7  : recovery delay
;d20: CLIP delay: 1/(4J(HH)) 
;cnst22: homonuclear J(HH) coupling                                 
;sp1 : strength for first sweep
;sp2 : strength for second sweep
;sp29: strength for PSYCHE double chirp element for homodecoupling
;gpz0: gradient strength for ZQ suppression
;gpz3: gradient for selective refocusing 
;gpz4: gradient for spatial encoding
;gpz5: gradient strength for homospoil
;gpz7: gradient for selective refocusing
;in0 : 1/(2 * SW) = DW
;nd0 : 2
;NS  : 2 * n
;DS  : 8
;td1 : number of t1 increments
;MC2 : States-TPPI
;cnst20: desired flip angle for PSYCHE pulse element (degrees) (normally 10-25)
;cnst21: bandwidth of each chirp in PSYCHE pulse element (Hz) (normally 10000)
;p32: duration of double-chirp pulse element 

;for z-only gradients:
;gpz0: 5%
;gpz3: 30%
;gpz4: 1-3%
;gpz5: 40%
;gpz7: 60%

;use gradient files:
;gpnam3: SMSQ10.100
;gpnam4: RECT.1
;gpnam7: SMSQ10.100

